PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '001', 'group': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [1920, 1080]
  expName = new_8T
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = psychopy_iohub_surface
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Routines
  Routine eye_calibration
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    CodeComponent eye_calibration_code
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracker:
            win.winHandle.set_visible(False)

            label = "start_calibration"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)

            # start calibration
            pupil_remote.send_string('C')
            print(pupil_remote.recv_string())
            sleep(25)
      End Routine:
        if eyetracker:
            label = "end_calibration"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)
            win.winHandle.set_visible(True)
  Routine eye_tracker_connect
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    CodeComponent eye_connect_code
      Code Type = Auto->JS
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      Begin Experiment:
        if eyetracker:
            import zmq
            import msgpack as serializer
            from time import sleep, time
            # Setup zmq context and remote helper
            ctx = zmq.Context()
            pupil_remote = zmq.Socket(ctx, zmq.REQ)
            pupil_remote.connect('tcp://127.0.0.1:50020')
            pupil_remote.send_string("PUB_PORT")
            pub_port = pupil_remote.recv_string()
            pub_socket = zmq.Socket(ctx, zmq.PUB)
            pub_socket.connect("tcp://127.0.0.1:" + str(pub_port))

            # set time to psychopy clock
            # an internal clock which starts when the experiment starts
            time_fn = core.monotonicClock.getTime

            # set pupil's time to psychopy time
            pupil_remote.send_string("T " + str(time_fn()))
            print(pupil_remote.recv_string())

            sleep(2.)

            # send notification:
            def notify(notification):
                """Sends ``notification`` to Pupil Remote"""
                topic = "notify." + notification["subject"]
                payload = serializer.dumps(notification, use_bin_type=True)
                pupil_remote.send_string(topic, flags=zmq.SNDMORE)
                pupil_remote.send(payload)
                return pupil_remote.recv_string()

            def send_trigger(trigger):
                payload = serializer.dumps(trigger, use_bin_type=True)
                pub_socket.send_string(trigger["topic"], flags=zmq.SNDMORE)
                pub_socket.send(payload)

            # Start the annotations plugin
            notify({"subject": "start_plugin", "name": "Annotation_Capture", "args": {}})

            # start recording
            pupil_remote.send_string('R')
            print(pupil_remote.recv_string())
            sleep(1.)


            def new_trigger(label, duration):
                return {
                "topic": "annotation",
                "label": label,
                "timestamp": time_fn(),
                "duration": duration,
                }

            label = "start_experiment"
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)

        else:
            continueRoutine = False
  Routine instruction_baseline
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    TextComponent instruction_baseline_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
                                              BASELINE

        The green cursor represents the position of your hand movement.

        You must start from the starting point in the center of the screen and move towards to hit the black target point that appears.

        You should move in a straight line as fast and accurately as you can towards the target.

        Once you hit the target, return to the starting point and wait for the next target to appear.

        You will do the eye calibration first...

        Press [space] to continue...
    KeyboardComponent instruction_baseline_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_rotation
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    TextComponent instruction_rotation_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Brief Rest Period

        In the next trials, the green cursor still represents your hand movements, but it will appear on the screen with some deviation.

        As before, you must try to hit the black target point with the green cursor.

        You will do the eye calibration first again...


        Press [space] to continue...
    KeyboardComponent instruction_rotation_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rotation
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    CodeComponent code_rotation
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
        mouse_startpoint_ring_rotation.opacity = 0

        ## Initialize variables and flags 初始化变量和标志位
        move_start = False # hand starts to move 标志手开始动
        feedback_start = False # end feedback appears 标志终点反馈出现
        blank_start = False
        feedback_position_set = False
        movement_frames = []  # save the position of each frame of the hand movement 用于保存手运动过程的每一帧位置

        ## clock 时钟
        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()
        blank_start_time = core.Clock()
        blank_start_time.reset()
        ## the hand position of the previous frame 得到上一帧的手位置
        lastPos = mouse_baseline.getPos()

        ## Calculate the radius of the ring 计算ring的半径
        x_mouse, y_mouse = mouse_rotation.getPos()
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        ## Conversion of feedback position 反馈的位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse - angle, target_radius)

        ## Set the ring size 设置ring的大小
        if not move_start and not feedback_start:
            ring_rotation.size = (ring_radius, ring_radius)

        ## choose how long the origin hold 选择在原点要待多久
        random_origin_duration = random.choice(random_origin_durations)

        ## eye tracker
        if eyetracker:
            # record the trial start time in psychopy 记录psychopy里每次试验开始的时间
            hand_trial_start=core.monotonicClock.getTime()

            label = 'start_trial ' + str(rotation_trials.thisN)
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)
      Each Frame:
        # update mouse pos
        x_mouse,y_mouse = mouse_rotation.getPos()
        ring_radius = euclidean_dist([fixation_ring_rotation.pos[0],fixation_ring_rotation.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius
        # save last pos
        thisPos = mouse_rotation.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos
        # hide rings
        ring_rotation.opacity = 0
        fixation_ring_rotation.opacity = 0
        mouse_startpoint_ring_rotation.opacity = 0
        feedback_ring_rotation.opacity = 0

        ## 【before start】
        if not move_start and not feedback_start:
            # if ring_radius<=0.8, fixation ring shows
            if ring_radius <= 0.8:
                fixation_ring_rotation.opacity = 1
                ring_rotation.opacity = 0
                mouse_startpoint_ring_rotation.opacity = 0
                # if ring_radius<=0.5, mouse_startpoint_ring shows
                if ring_radius < 0.5:
                    mouse_startpoint_ring_rotation.opacity = 1
                else:
                    mouse_startpoint_ring_rotation.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_rotation.opacity = 1
                fixation_ring_rotation.opacity = 0
                mouse_startpoint_ring_rotation.opacity = 0
            # If the mouse stays at the origin for enough time (random_origin_duration), the target appears
            # 若鼠标在原点停留足够的时间（random_origin_duration），target出现
            if mouse_startpoint_ring_rotation.opacity == 1 and mouse_startpoint_time.getTime() >= random_origin_duration:
                target_rotation.opacity = 1
                # If the movement distance between two frames is greater than 0.005, movement starts
                # 若两帧运动距离大于0.05，手动开始
                if mouseDist > 0.005:
                    move_start = 1
                    RT = target_show_time.getTime()
                    # Add move_onset_time1 (psychopy system clock, in order to align with eye movement time)
                    # 添加 move_onset_time1(psychopy系统时钟，为了与eye movement时间对齐)
                    move_onset_time1 = core.monotonicClock.getTime()
                    if eyetracker:
                        label = 'move_start'
                        duration = 0.
                        minimal_trigger = new_trigger(label, duration)
                        send_trigger(minimal_trigger)
                else:
                    move_start = 0
                    move_start_time.reset()
            else:
                target_rotation.opacity = 0
                target_show_time.reset()

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_rotation.getPos())
            #target_rotation.opacity = 0
            mouse_startpoint_ring_rotation.opacity = 0
            ring_rotation.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 1.2:
            # If the movement distance between two frames is less than 0.02, the movement ends
            # 若两帧运动距离小于0.02，运动结束
            if mouseDist < 0.01 and move_start_time.getTime() > 0.5:
                move_start = 0
                feedback_start = 1
                move_end_time1 = core.monotonicClock.getTime()
            else:
                move_start = 1
                feedback_start = 0
                move_end_time.reset()
            if move_start == 0 and eyetracker:
                label = 'move_end'
                duration = 0.
                minimal_trigger = new_trigger(label, duration)
                send_trigger(minimal_trigger)
                #sleep(.1)

        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= feedback_delay:  # feedback delay
                if not feedback_position_set:
                    # Conversion of feedback position 反馈位置的转换
                    [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
                    [feedback_x, feedback_y] = pol2cart(theta_mouse - angle, target_radius)

                    feedback_position_set = True  # Set the flag to True

                feedback_ring_rotation.opacity = 1
                target_rotation.opacity = 1
            else:
                feedback_ring_rotation.opacity = 0
                #target_rotation.opacity = 0
                feedback_start_time.reset()
            if feedback_ring_rotation.opacity == 1 and feedback_start_time.getTime() >= feedback_duration:  # feedback duration暂时设为1s
                feedback_ring_rotation.opacity = 0
                target_rotation.opacity = 0
                blank_start = 1
        #        continueRoutine = False
            else:
                blank_start_time.reset()
        else:
            feedback_ring_rotation.opacity = 0

        if blank_start == 1 and blank_start_time.getTime() >= blank_screen:
            continueRoutine = False
      End Routine:
        thisExp.addData('RT', RT) # save reaction time2
        thisExp.addData('movement_frames', movement_frames) # save hand movements

        thisExp.addData('MoveOnsetTime1', move_onset_time1) # save hand move_start time in psychopy
        thisExp.addData('MoveEndTime1', move_end_time1) # save hand move_end time in psychopy
        thisExp.addData('HandTrialStart', hand_trial_start) # save hand trial start time in psychopy

        if eyetracker:
            label = 'end_trial ' + str(rotation_trials.thisN)
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)
    MouseComponent mouse_rotation
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_rotation
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = [Ring_W, Ring_H]
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_rotation
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mouse_startpoint_ring_rotation
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = (x_mouse, y_mouse)
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent target_rotation
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_ring_rotation
      fillColor = red
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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  Routine instruction_aftereffect
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    TextComponent instruction_aftereffect_text
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of Cursor Movement Phase

        You need to move to target points directly with your hand, without using any strategy.

        However, there will be no cursor to indicate the position of your hand movement in the next trials.


        Press [space] to continue...
    KeyboardComponent instruction_aftereffect_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline
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    CodeComponent code_baseline
      Code Type = Py
      Begin Experiment:
        from psychopy.tools.coordinatetools import cart2pol
        from psychopy.tools.coordinatetools import pol2cart
        import random
        from time import sleep

        # Calculate Euclidean distance 计算欧氏距离
        def euclidean_dist(vec1, vec2):
            return sqrt((vec1[0] - vec2[0])**2 + (vec1[1] - vec2[1])**2)
        # origin hold durations
        random_origin_durations = [0.8, 1.0, 1.2, 1.4, 1.6]
        # might change depending on which computer/screen is being used
        target_radius = 16 # 12 # 10
        # rotation angle
        angle = 30.0
        # group info: NoDelay=0, LongDelay=1
        group = expInfo['group']
        if group == '0':
            feedback_delay = 0.05
            blank_screen = 1.45
        elif group == '1':
            feedback_delay = 1.2
            blank_screen = 0.3

        # feedback duration 反馈显示的时长
        feedback_duration = 1.0
      Begin Routine:
        win.mouseVisible = False
        mouse_startpoint_ring_baseline.opacity = 0

        ## Initialize variables and flags 初始化变量和标志位
        move_start = False # hand starts to move 标志手开始动
        feedback_start = False # end feedback appears 标志终点反馈出现
        blank_start = False
        feedback_position_set = False
        movement_frames = []  # save the position of each frame of the hand movement 用于保存手运动过程的每一帧位置

        ## clock 时钟
        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()
        blank_start_time = core.Clock()
        blank_start_time.reset()
        ## the hand position of the previous frame 得到上一帧的手位置
        lastPos = mouse_baseline.getPos()

        ## Calculate the radius of the ring 计算ring的半径
        x_mouse, y_mouse = mouse_baseline.getPos()
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        ## Conversion of feedback position 反馈的位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

        ## Set the ring size 设置ring的大小
        if not move_start and not feedback_start:
            ring_baseline.size = (ring_radius, ring_radius)

        ## choose how long the origin hold 选择在原点要待多久
        random_origin_duration = random.choice(random_origin_durations)

        ## eye tracker
        if eyetracker:
            # record the trial start time in psychopy 记录psychopy里每次试验开始的时间
            hand_trial_start=core.monotonicClock.getTime()

            label = 'start_trial ' + str(baseline_trials.thisN)
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)
      Each Frame:
        # update mouse pos
        x_mouse,y_mouse = mouse_baseline.getPos()
        ring_radius = euclidean_dist([fixation_ring_baseline.pos[0],fixation_ring_baseline.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius
        # save last pos
        thisPos = mouse_baseline.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos
        # hide rings
        ring_baseline.opacity = 0
        fixation_ring_baseline.opacity = 0
        mouse_startpoint_ring_baseline.opacity = 0
        feedback_ring_baseline.opacity = 0

        ## 【before start】
        if not move_start and not feedback_start:
            # if ring_radius<=0.8, fixation ring shows
            if ring_radius <= 0.8:
                fixation_ring_baseline.opacity = 1
                ring_baseline.opacity = 0
                mouse_startpoint_ring_baseline.opacity = 0
                # if ring_radius<=0.5, mouse_startpoint_ring shows
                if ring_radius < 0.5:
                    mouse_startpoint_ring_baseline.opacity = 1
                else:
                    mouse_startpoint_ring_baseline.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_baseline.opacity = 1
                fixation_ring_baseline.opacity = 0
                mouse_startpoint_ring_baseline.opacity = 0
            # If the mouse stays at the origin for enough time (random_origin_duration), the target appears
            # 若鼠标在原点停留足够的时间（random_origin_duration），target出现
            if mouse_startpoint_ring_baseline.opacity == 1 and mouse_startpoint_time.getTime() >= random_origin_duration:
                target_baseline.opacity = 1
                # If the movement distance between two frames is greater than 0.005, movement starts
                # 若两帧运动距离大于0.005，手动开始
                if mouseDist > 0.005:
                    move_start = 1
                    RT = target_show_time.getTime()
                    # Add move_onset_time1 (psychopy system clock, in order to align with eye movement time)
                    # 添加 move_onset_time1(psychopy系统时钟，为了与eye movement时间对齐)
                    move_onset_time1 = core.monotonicClock.getTime()
                    if eyetracker:
                        label = 'move_start'
                        duration = 0.
                        minimal_trigger = new_trigger(label, duration)
                        send_trigger(minimal_trigger)
                else:
                    move_start = 0
                    move_start_time.reset()
            else:
                target_baseline.opacity = 0
                target_show_time.reset()

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_baseline.getPos())
            #target_baseline.opacity = 0
            mouse_startpoint_ring_baseline.opacity = 0
            ring_baseline.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 1.2:
            # If the movement distance between two frames is less than 0.02, the movement ends
            # 若两帧运动距离小于0.002，运动结束
            if mouseDist < 0.01 and move_start_time.getTime() > 0.5:
                move_start = 0
                feedback_start = 1
                move_end_time1 = core.monotonicClock.getTime()
            else:
                move_start = 1
                feedback_start = 0
                move_end_time.reset()
            if move_start == 0 and eyetracker:
                label = 'move_end'
                duration = 0.
                minimal_trigger = new_trigger(label, duration)
                send_trigger(minimal_trigger)
                #sleep(.1)

        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= feedback_delay:  # feedback delay
                if not feedback_position_set:
                    # Conversion of feedback position 反馈位置的转换
                    [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
                    [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

                    feedback_position_set = True  # Set the flag to True

                feedback_ring_baseline.opacity = 1
                target_baseline.opacity = 1

            else:
                feedback_ring_baseline.opacity = 0
                #target_baseline.opacity = 0
                feedback_start_time.reset()
            if feedback_ring_baseline.opacity == 1 and feedback_start_time.getTime() >= feedback_duration:  # feedback duration设为1s
                feedback_ring_baseline.opacity = 0
                target_baseline.opacity = 0
                blank_start = 1
            else:
                blank_start_time.reset()


        else:
            feedback_ring_baseline.opacity = 0


        if blank_start == 1 and blank_start_time.getTime() >= blank_screen:
            continueRoutine = False

        #if feedback_start_time.getTime() >= (feedback_duration + blank_screen):
      End Routine:
        thisExp.addData('RT', RT) # save reaction time1
        thisExp.addData('movement_frames', movement_frames) # save hand movements

        thisExp.addData('MoveOnsetTime1', move_onset_time1) # save hand move_start time in psychopy
        thisExp.addData('MoveEndTime1', move_end_time1) # save hand move_end time in psychopy
        thisExp.addData('HandTrialStart', hand_trial_start) # save hand trial start time in psychopy

        if eyetracker:
            label = 'end_trial ' + str(baseline_trials.thisN)
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)
    MouseComponent mouse_baseline
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_baseline
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = (Ring_W, Ring_H)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_baseline
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mouse_startpoint_ring_baseline
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = (x_mouse, y_mouse)
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent target_baseline
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_ring_baseline
      fillColor = red
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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  Routine aftereffect
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    CodeComponent code_aftereffect
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
        mouse_startpoint_ring_aftereffect.opacity = 0

        ## Initialize variables and flags 初始化变量和标志位
        move_start = False # hand starts to move 标志手开始动
        feedback_start = False # end feedback appears 标志终点反馈出现
        blank_start = False
        movement_frames = []  # save the position of each frame of the hand movement 用于保存手运动过程的每一帧位置

        ## clock 时钟
        mouse_startpoint_time = core.Clock()  # 用于记录mouse_startpoint_ring出现的时间
        target_show_time = core.Clock()
        move_start_time = core.Clock()  # 用于记录运动开始的时间
        move_end_time = core.Clock()
        feedback_start_time = core.Clock()
        mouse_startpoint_time.reset()
        target_show_time.reset()
        move_start_time.reset()
        move_end_time.reset()
        feedback_start_time.reset()
        blank_start_time = core.Clock()
        blank_start_time.reset()
        ## the hand position of the previous frame 得到上一帧的手位置
        lastPos = mouse_aftereffect.getPos()

        ## Calculate the radius of the ring 计算ring的半径
        x_mouse, y_mouse = mouse_aftereffect.getPos()
        ring_radius = euclidean_dist([0,0], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius

        ## Conversion of feedback position 反馈的位置的转换
        [theta_mouse, rho_mouse] = cart2pol(x_mouse, y_mouse)
        [feedback_x, feedback_y] = pol2cart(theta_mouse, target_radius)

        ## Set the ring size 设置ring的大小
        if not move_start and not feedback_start:
            ring_aftereffect.size = (ring_radius, ring_radius)

        ## choose how long the origin hold 选择在原点要待多久
        random_origin_duration = random.choice(random_origin_durations)

        ## eye tracker
        if eyetracker:
            # record the trial start time in psychopy 记录psychopy里每次试验开始的时间
            hand_trial_start=core.monotonicClock.getTime()

            label = 'start_trial ' + str(aftereffect_trials.thisN)
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)
      Each Frame:
        # update mouse pos
        x_mouse,y_mouse = mouse_aftereffect.getPos()
        ring_radius = euclidean_dist([fixation_ring_aftereffect.pos[0],fixation_ring_aftereffect.pos[1]], [x_mouse,y_mouse])
        Ring_W = ring_radius
        Ring_H = ring_radius
        # save last pos
        thisPos = mouse_aftereffect.getPos()
        mouseDist = euclidean_dist(lastPos, thisPos)
        lastPos = thisPos
        # hide rings
        ring_aftereffect.opacity = 0
        fixation_ring_aftereffect.opacity = 0
        mouse_startpoint_ring_aftereffect.opacity = 0
        feedback_ring_aftereffect.opacity = 0

        ## 【before start】
        if not move_start and not feedback_start:
            # if ring_radius<=0.8, fixation ring shows
            if ring_radius <= 0.8:
                fixation_ring_aftereffect.opacity = 1
                ring_aftereffect.opacity = 0
                mouse_startpoint_ring_aftereffect.opacity = 0
                # if ring_radius<=0.5, mouse_startpoint_ring shows
                if ring_radius < 0.5:
                    mouse_startpoint_ring_aftereffect.opacity = 1
                else:
                    mouse_startpoint_ring_aftereffect.opacity = 0
                    mouse_startpoint_time.reset()
            else:
                ring_aftereffect.opacity = 1
                fixation_ring_aftereffect.opacity = 0
                mouse_startpoint_ring_aftereffect.opacity = 0
            # If the mouse stays at the origin for enough time (random_origin_duration), the target appears
            # 若鼠标在原点停留足够的时间（random_origin_duration），target出现
            if mouse_startpoint_ring_aftereffect.opacity == 1 and mouse_startpoint_time.getTime() >= random_origin_duration:
                target_aftereffect.opacity = 1
                # If the movement distance between two frames is greater than 0.005, movement starts
                # 若两帧运动距离大于0.005，手动开始
                if mouseDist > 0.005:
                    move_start = 1
                    RT = target_show_time.getTime()
                    # Add move_onset_time1 (psychopy system clock, in order to align with eye movement time)
                    # 添加 move_onset_time1(psychopy系统时钟，为了与eye movement时间对齐)
                    move_onset_time1 = core.monotonicClock.getTime()
                    if eyetracker:
                        label = 'move_start'
                        duration = 0.
                        minimal_trigger = new_trigger(label, duration)
                        send_trigger(minimal_trigger)
                else:
                    move_start = 0
                    move_start_time.reset()
            else:
                target_aftereffect.opacity = 0
                target_show_time.reset()

        ## move start
        if move_start == 1:
            movement_frames.append(mouse_aftereffect.getPos())
            #target_aftereffect.opacity = 0
            mouse_startpoint_ring_aftereffect.opacity = 0
            ring_aftereffect.opacity = 0
            # move end
            #if mouseDist < 0.01 or move_start_time.getTime() > 1.2:
            # If the movement distance between two frames is less than 0.02, the movement ends
            # 若两帧运动距离小于0.02，运动结束
            if mouseDist < 0.01 and move_start_time.getTime() > 0.5:
                move_start = 0
                feedback_start = 1
                move_end_time1 = core.monotonicClock.getTime()
            else:
                move_start = 1
                feedback_start = 0
                move_end_time.reset()
            if move_start == 0 and eyetracker:
                label = 'move_end'
                duration = 0.
                minimal_trigger = new_trigger(label, duration)
                send_trigger(minimal_trigger)
                #sleep(.1)

        ## feedback start
        if feedback_start == 1:
            if move_end_time.getTime() >= feedback_delay:  # feedback delay
                target_aftereffect.opacity = 1
            else:
                feedback_ring_aftereffect.opacity = 0
                #target_rotation.opacity = 0
                feedback_start_time.reset()
            if feedback_start_time.getTime() >= feedback_duration:  # feedback duration暂时设为1s
                target_aftereffect.opacity = 0
                blank_start = 1
        #        continueRoutine = False
            else:
                blank_start_time.reset()
        else:
            feedback_ring_aftereffect.opacity = 0

        if blank_start == 1 and blank_start_time.getTime() >= blank_screen:
            continueRoutine = False
      End Routine:
        thisExp.addData('RT', RT) # save reaction time3
        thisExp.addData('movement_frames', movement_frames) # save hand movements

        thisExp.addData('MoveOnsetTime1', move_onset_time1) # save hand move_start time in psychopy
        thisExp.addData('MoveEndTime1', move_end_time1) # save hand move_end time in psychopy
        thisExp.addData('HandTrialStart', hand_trial_start) # save hand trial start time in psychopy

        if eyetracker:
            label = 'end_trial ' + str(aftereffect_trials.thisN)
            duration = 0.
            minimal_trigger = new_trigger(label, duration)
            send_trigger(minimal_trigger)
            sleep(1.)
    MouseComponent mouse_aftereffect
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    PolygonComponent ring_aftereffect
      fillColor = none
      nVertices = 50
      saveStartStop = False
      shape = regular polygon...
      size [set every frame] = (Ring_W, Ring_H)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent fixation_ring_aftereffect
      fillColor = white
      nVertices = 36
      opacity = 0
      saveStartStop = False
      shape = regular polygon...
      size = (1.1, 1.1)
      startVal [time (s)] = 0.0
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    PolygonComponent mouse_startpoint_ring_aftereffect
      fillColor = green
      lineColor = green
      nVertices = 36
      opacity = 0
      pos [set every frame] = (x_mouse, y_mouse)
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent target_aftereffect
      fillColor = black
      lineColor = black
      nVertices = 36
      opacity = 0
      pos [set every repeat] = [target_x, target_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent feedback_ring_aftereffect
      fillColor = red
      nVertices = 36
      opacity = 0
      pos [set every frame] = [feedback_x, feedback_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        The experiment ends.

        Thanks!
  Routine end_eye
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    CodeComponent end_eye_code
      Code Type = Auto->JS
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      End Experiment:
        if eyetracker:
            pupil_remote.send_string('r')
            print(pupil_remote.recv_string())
Flow
  Routine eye_tracker_connect
  LoopInitiator break_trials1 loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine instruction_baseline
    Routine eye_calibration
    LoopInitiator baseline_trials loopType="TrialHandler"
      conditionsFile = conditions_baseline.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'target_x': 16, 'target_y': 0, 'baseline': 1},
        {'target_x': 0, 'target_y': 16, 'baseline': 1},
        {'target_x': 11.314, 'target_y': 11.314, 'baseline': 1},
        {'target_x': -11.314, 'target_y': 11.314, 'baseline': 1},
        {'target_x': -16, 'target_y': 0, 'baseline': 1},
        {'target_x': 0, 'target_y': -16, 'baseline': 1},
        {'target_x': -11.314, 'target_y': -11.314, 'baseline': 1},
        {'target_x': 11.314, 'target_y': -11.314, 'baseline': 1},
        {'target_x': 11.314, 'target_y': 11.314, 'baseline': 1},
        {'target_x': 16, 'target_y': 0, 'baseline': 1},
        {'target_x': 0, 'target_y': 16, 'baseline': 1},
        {'target_x': -16, 'target_y': 0, 'baseline': 1},
        {'target_x': -11.314, 'target_y': 11.314, 'baseline': 1},
        {'target_x': -11.314, 'target_y': -11.314, 'baseline': 1},
        {'target_x': 0, 'target_y': -16, 'baseline': 1},
        {'target_x': 11.314, 'target_y': -11.314, 'baseline': 1},
        {'target_x': 0, 'target_y': 16, 'baseline': 1},
        {'target_x': 11.314, 'target_y': 11.314, 'baseline': 1},
        {'target_x': 16, 'target_y': 0, 'baseline': 1},
        {'target_x': -11.314, 'target_y': 11.314, 'baseline': 1},
        {'target_x': -16, 'target_y': 0, 'baseline': 1},
        {'target_x': -11.314, 'target_y': -11.314, 'baseline': 1},
        {'target_x': 11.314, 'target_y': -11.314, 'baseline': 1},
        {'target_x': 0, 'target_y': -16, 'baseline': 1},
        {'target_x': -11.314, 'target_y': 11.314, 'baseline': 1},
        {'target_x': 11.314, 'target_y': 11.314, 'baseline': 1},
        {'target_x': 0, 'target_y': 16, 'baseline': 1},
        {'target_x': 0, 'target_y': -16, 'baseline': 1},
        {'target_x': -16, 'target_y': 0, 'baseline': 1}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
      Routine baseline
    LoopTerminator baseline_trials
  LoopTerminator break_trials1
  LoopInitiator break_trials2 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine instruction_rotation
    Routine eye_calibration
    LoopInitiator rotation_trials loopType="TrialHandler"
      conditionsFile = conditions_rotation.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'target_x': 16, 'target_y': 0, 'rotation': 1},
        {'target_x': 0, 'target_y': 16, 'rotation': 1},
        {'target_x': 11.314, 'target_y': 11.314, 'rotation': 1},
        {'target_x': -11.314, 'target_y': 11.314, 'rotation': 1},
        {'target_x': -16, 'target_y': 0, 'rotation': 1},
        {'target_x': 0, 'target_y': -16, 'rotation': 1},
        {'target_x': -11.314, 'target_y': -11.314, 'rotation': 1},
        {'target_x': 11.314, 'target_y': -11.314, 'rotation': 1},
        {'target_x': 11.314, 'target_y': 11.314, 'rotation': 1},
        {'target_x': 16, 'target_y': 0, 'rotation': 1},
        {'target_x': 0, 'target_y': 16, 'rotation': 1},
        {'target_x': -16, 'target_y': 0, 'rotation': 1},
        {'target_x': -11.314, 'target_y': 11.314, 'rotation': 1},
        {'target_x': -11.314, 'target_y': -11.314, 'rotation': 1},
        {'target_x': 0, 'target_y': -16, 'rotation': 1},
        {'target_x': 11.314, 'target_y': -11.314, 'rotation': 1},
        {'target_x': 0, 'target_y': 16, 'rotation': 1},
        {'target_x': 11.314, 'target_y': 11.314, 'rotation': 1},
        {'target_x': 16, 'target_y': 0, 'rotation': 1},
        {'target_x': -11.314, 'target_y': 11.314, 'rotation': 1},
        {'target_x': -16, 'target_y': 0, 'rotation': 1},
        {'target_x': -11.314, 'target_y': -11.314, 'rotation': 1},
        {'target_x': 11.314, 'target_y': -11.314, 'rotation': 1},
        {'target_x': 0, 'target_y': -16, 'rotation': 1},
        {'target_x': -11.314, 'target_y': 11.314, 'rotation': 1},
        {'target_x': 11.314, 'target_y': 11.314, 'rotation': 1},
        {'target_x': 0, 'target_y': 16, 'rotation': 1},
        {'target_x': 0, 'target_y': -16, 'rotation': 1},
        {'target_x': -16, 'target_y': 0, 'rotation': 1}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
      Routine rotation
    LoopTerminator rotation_trials
  LoopTerminator break_trials2
  Routine instruction_aftereffect
  LoopInitiator aftereffect_trials loopType="TrialHandler"
    conditionsFile = conditions_aftereffect.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'target_x': 16, 'target_y': 0, 'aftereffect': 1},
      {'target_x': 0, 'target_y': 16, 'aftereffect': 1},
      {'target_x': 11.314, 'target_y': 11.314, 'aftereffect': 1},
      {'target_x': -11.314, 'target_y': 11.314, 'aftereffect': 1},
      {'target_x': -16, 'target_y': 0, 'aftereffect': 1},
      {'target_x': 0, 'target_y': -16, 'aftereffect': 1},
      {'target_x': -11.314, 'target_y': -11.314, 'aftereffect': 1},
      {'target_x': 11.314, 'target_y': -11.314, 'aftereffect': 1},
      {'target_x': 11.314, 'target_y': 11.314, 'aftereffect': 1},
      {'target_x': 16, 'target_y': 0, 'aftereffect': 1},
      {'target_x': 0, 'target_y': 16, 'aftereffect': 1},
      {'target_x': -16, 'target_y': 0, 'aftereffect': 1},
      {'target_x': -11.314, 'target_y': 11.314, 'aftereffect': 1},
      {'target_x': -11.314, 'target_y': -11.314, 'aftereffect': 1},
      {'target_x': 0, 'target_y': -16, 'aftereffect': 1},
      {'target_x': 11.314, 'target_y': -11.314, 'aftereffect': 1},
      {'target_x': 0, 'target_y': 16, 'aftereffect': 1},
      {'target_x': 11.314, 'target_y': 11.314, 'aftereffect': 1},
      {'target_x': 16, 'target_y': 0, 'aftereffect': 1},
      {'target_x': -11.314, 'target_y': 11.314, 'aftereffect': 1},
      {'target_x': -16, 'target_y': 0, 'aftereffect': 1},
      {'target_x': -11.314, 'target_y': -11.314, 'aftereffect': 1},
      {'target_x': 11.314, 'target_y': -11.314, 'aftereffect': 1},
      {'target_x': 0, 'target_y': -16, 'aftereffect': 1},
      {'target_x': -11.314, 'target_y': 11.314, 'aftereffect': 1},
      {'target_x': 11.314, 'target_y': 11.314, 'aftereffect': 1},
      {'target_x': 0, 'target_y': 16, 'aftereffect': 1}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
    Routine aftereffect
  LoopTerminator aftereffect_trials
  Routine end
  Routine end_eye
